CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "None")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:marker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:HPA_H
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch4")
    Name to assign these images:tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch5")
    Name to assign these images:HPA_L
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
CorrectIlluminationCalculate:[module_num:6|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enabled:False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
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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enabled:False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
    Name the output image:CorrBlue
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    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Crop:[module_num:8|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
    Select the input image:DAPI
    Name the output image:CropDAPI
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:54,-54
    Top and bottom rectangle positions:54,-54
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    Remove empty rows and columns?:No
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
Crop:[module_num:9|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
    Select the input image:HPA_H
    Name the output image:CropHPAH
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:54,-54
    Top and bottom rectangle positions:54,-54
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    Remove empty rows and columns?:No
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
Crop:[module_num:10|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
    Select the input image:HPA_L
    Name the output image:CropHPAL
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:54,-54
    Top and bottom rectangle positions:54,-54
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    Remove empty rows and columns?:No
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
Crop:[module_num:11|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
    Select the input image:marker
    Name the output image:CropMarker
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:54,-54
    Top and bottom rectangle positions:54,-54
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    Remove empty rows and columns?:No
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
Crop:[module_num:12|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
    Select the input image:tubulin
    Name the output image:CropTubulin
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:54,-54
    Top and bottom rectangle positions:54,-54
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    Remove empty rows and columns?:No
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:CropDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.02,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropTubulin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.02,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:YlGnBu

ConvertObjectsToImage:[module_num:17|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
    Select the input objects:FilteredNuclei
    Name the output image:NucImage
    Select the color format:Color
    Select the colormap:YlGnBu

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:Cytoplasm
    Name the output image:CytoImage
    Select the color format:Color
    Select the colormap:YlGnBu

DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:CellImage
    Text color:white
    Name the output image that has the measurements displayed:CellImage_labeled
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:20|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
    Display object or image measurements?:Object
    Select the input objects:FilteredNuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:NucImage
    Text color:white
    Name the output image that has the measurements displayed:NucImage_labeled
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:21|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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:CytoImage
    Text color:white
    Name the output image that has the measurements displayed:CytoImage_labeled
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:CellImage_labeled
    Select method for constructing file names:From image filename
    Select image name for file prefix:tubulin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cells
    Saved file format:png
    Output file location:Elsewhere...|E:\\cellprofiler_test\\230404_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:NucImage_labeled
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nuclei
    Saved file format:png
    Output file location:Elsewhere...|E:\\cellprofiler_test\\230404_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:CytoImage_labeled
    Select method for constructing file names:From image filename
    Select image name for file prefix:tubulin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cytosol
    Saved file format:png
    Output file location:Elsewhere...|E:\\cellprofiler_test\\230404_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:Cells, Cytoplasm, FilteredNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:CropDAPI, CropHPAH, CropHPAL, CropMarker, CropTubulin
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei

MeasureColocalization:[module_num:27|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
    Select images to measure:CropDAPI, CropHPAH, CropHPAL, CropMarker, CropTubulin
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|E:\\cellprofiler_test\\230404_test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Correlation_Manders_CropMarker_CropTubulin,Cytoplasm|Correlation_Manders_CropMarker_CropHPAL,Cytoplasm|Correlation_Manders_CropMarker_CropHPAH,Cytoplasm|Correlation_Manders_CropMarker_CropDAPI,Cytoplasm|Correlation_Manders_CropHPAL_CropDAPI,Cytoplasm|Correlation_Manders_CropHPAL_CropTubulin,Cytoplasm|Correlation_Manders_CropHPAL_CropMarker,Cytoplasm|Correlation_Manders_CropHPAL_CropHPAH,Cytoplasm|Correlation_Manders_CropDAPI_CropTubulin,Cytoplasm|Correlation_Manders_CropDAPI_CropMarker,Cytoplasm|Correlation_Manders_CropDAPI_CropHPAL,Cytoplasm|Correlation_Manders_CropDAPI_CropHPAH,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20230404_
    Overwrite existing files without warning?:No
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